
#=====================================================
# VISUALISATION
#=====================================================

/vis/disable
#/tracking/verbose 2
#/control/execute visu.mac
#/control/execute visu_qt.mac
#/run/verbose 2
#/event/verbose 2
#/gate/output/verbose 2

/gate/geometry/setMaterialDatabase    GateMaterials.db
#=====================================================
# GEOMETRY
#=====================================================

/control/execute                         ./macros/Geometry.mac


#=====================================================
#  P H A N T O M
#=====================================================

# 
#/control/execute                         ./macros/Phantom_cylinder.mac


#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList emstandard_opt3
/gate/physics/processList Enabled
/gate/physics/processList Initialized

#=====================================================
# INITIALISATION
#=====================================================


/gate/actor/addActor SimulationStatisticActor     MyActor
/gate/actor/MyActor/attachTo                 Detector
/gate/actor/MyActor/save                          MyOutput.txt


/gate/run/initialize


#=====================================================
#   D I G I T I Z E R: DETECTOR ELECTRONIC RESPONSE
#===================================================== 

/control/execute                        ./macros/Digitizer.mac

#=====================================================
#  P A R T I C L E   S O U R C E
#=====================================================

/control/execute                          ./macros/Source_point.mac


#=====================================================
#  D A T A   O U T P U T   
#=====================================================

/gate/output/root/enable
/gate/output/root/setFileName             output/test_Adder

/gate/output/root/setRootHitFlag         1
/gate/output/root/setRootOpticalFlag         1
/gate/output/root/setRootSinglesFlag      1
/gate/output/root/setRootCoincidencesFlag 0
#/gate/output/root/verbose 3

#/gate/output/tree/optical/enable

#=====================================================
#  R U N Parameters 
#=====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456789
/gate/random/verbose 1

/gate/application/setTimeSlice   0.01 s # 2s
/gate/application/setTimeStart   0. s
/gate/application/setTimeStop    0.01 s
/gate/application/startDAQ